# 1 "/opt/topspin3.2/exp/stan/nmr/lists/pp/hsqcetfpf3gpsi"
;hsqcetfpf3gpsi
;avance-version (12/01/11)
;HSQC
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using f3 - channel
;using flip-back pulse
;
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
;   301-306 (1994)
;S. Grzesiek & A. Bax, J. Am. Chem. Soc. 115, 12593-12594 (1993)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>
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"p2=p1*2"
"p22=p21*2"
"d11=30m"
"d26=1s/(cnst4*4)"


"d0=3u"
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"in0=inf1/2"


"DELTA1=p16+d16-p1*0.78+de+8u"
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"DELTA=p16+d16+larger(p2,p8)+d0*2"


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"acqt0=0"
baseopt_echo


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define delay MCWRK
define delay MCREST
define delay d0orig
"d0orig=d0"
define list<loopcounter> SPARSELIST = <$NUSLIST>
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter STNCNT
"STNCNT=SPARSELIST.len/1"
"MCREST = d1 - d1"
"MCWRK = 0.047619*d1"

    dccorr
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1 ze
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  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
  MCWRK
  "ph1loop = 0"
      "d0=d0orig + t1loop * in0 "
      "phval5 = (ph1loop % 2) * 180"
      MCWRK ip5 + phval5
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
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  d11 pl16:f3
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2 MCWRK  * 8 do:f3
LBLF1, MCWRK  * 12
LBLSTN, MCWRK 
  MCREST
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3 (p1 ph1)
  d26 pl3:f3
  (center (p2 ph2) (p22 ph6):f3 )
  d26 setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  (p1 ph2) 
  4u pl0:f1
  (p11:sp1 ph1:r):f1
  4u
  p16:gp1
  d16 pl1:f1
  (p21 ph3):f3
  d0 
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  (center (p2 ph7) (p8:sp13 ph1):f2 )


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  d0
  p16:gp2*EA
  d16
  (p22 ph4):f3
  DELTA
  (center (p1 ph1) (p21 ph4):f3 )
  d24
  (center (p2 ph1) (p22 ph1):f3 )
  d24
  (center (p1 ph2) (p21 ph5):f3 )
  d26
  (center (p2 ph1) (p22 ph1):f3 )
  d26
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp3
  d16 pl16:f3
  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31 cpd3:f3
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  MCWRK  do:f3 wr #0 if #0 zd 

  MCWRK
  "ph1loop+=1"
      "d0=d0orig + t1loop * in0 "
      "phval5 = (ph1loop % 2) * 180"
      MCWRK ip5 + phval5
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLF1 times 2
  MCWRK 
  MCWRK
  "ph1loop-=2"
  MCWRK 

  MCWRK
  "t1loop = SPARSELIST"
  MCWRK  SPARSELIST.inc
  MCWRK
  "ph1loop = 0"
      "d0=d0orig + t1loop * in0 "
      "phval5 = (ph1loop % 2) * 180"
      MCWRK ip5 + phval5
      "phval3 = (t1loop * 180)%360"
      MCWRK ip3 + phval3
      "phval6 = (t1loop * 180)%360"
      MCWRK ip6 + phval6
      "phval31 = (t1loop * 180)%360"
      MCWRK ip31 + phval31
      MCWRK
      "phval0 = ph1loop * 1"
      MCWRK setgrad EA
  lo to LBLSTN times STNCNT
  MCWRK
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exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph31=2 0 0 2
  

;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl16: f3 channel - power level for CPD/BB decoupling
;sp1: f1 channel - shaped pulse  90 degree
;sp13: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p8 : f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p11: f1 channel -  90 degree shaped pulse
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d16: delay for homospoil/gradient recovery
;d24: 1/(4J)YH for YH
;     1/(8J)YH for all multiplicities
;d26: 1/(4J(YH))
;cnst4: = J(YH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd3: decoupling according to sequence defined by cpdprg3
;pcpd3: f3 channel - 90 degree pulse for decoupling sequence
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;use gradient ratio:	gp 1 : gp 2 : gp 3
;			  50 :   80 : 20.1       for C-13
;			  50 :   80 :  8.1       for N-15

;for z-only gradients:
;gpz1: 50%
;gpz2: 80%
;gpz3: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
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                                          ;preprocessor-flags-start
;1: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
                                          ;preprocessor-flags-end


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;$Id: hsqcetfpf3gpsi,v 1.6.2.1.4.1 2012/01/31 17:56:32 ber Exp $
